CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Channel>.*)-(?P<Animal>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C2")
    Name to assign these images:PV
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3")
    Name to assign these images:Bin1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C4")
    Name to assign these images:Gad
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:PV
    Name the primary objects to be identified:PVcells
    Typical diameter of objects, in pixel units (Min,Max):5,75
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Gad
    Name the primary objects to be identified:GadCells
    Typical diameter of objects, in pixel units (Min,Max):10,75
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:Bin1
    Name the primary objects to be identified:Bin1
    Typical diameter of objects, in pixel units (Min,Max):2,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
Threshold:[module_num:8|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
    Select the input image:Gad
    Name the output image:ThresholdGad
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
Threshold:[module_num:9|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
    Select the input image:PV
    Name the output image:ThresholdPV
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
Threshold:[module_num:10|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
    Select the input image:Bin1
    Name the output image:ThresholdBin1
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RelateObjects:[module_num:11|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
    Parent objects:GadCells
    Child objects:PVcells
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:PV_in_Gad
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
FilterObjects:[module_num:12|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
    Select the objects to filter:GadCells
    Name the output objects:PVposGad
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:PVnegGad
    Select the measurement to filter by:Children_PVcells_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:13|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
    Select objects to be masked:Bin1
    Name the masked objects:Bin1_maskedBy_PV
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:PVcells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:14|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
    Parent objects:PVcells
    Child objects:Bin1_maskedBy_PV
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Bin1_in_PV
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
FilterObjects:[module_num:15|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
    Select the objects to filter:PVcells
    Name the output objects:Bin1PosPV
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:Bin1NegPV
    Select the measurement to filter by:Children_Bin1_maskedBy_PV_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:16|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
    Select objects to be masked:Bin1
    Name the masked objects:Bin1_maskedBy_Gad
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:PVnegGad
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:17|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
    Parent objects:PVnegGad
    Child objects:Bin1_maskedBy_Gad
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Bin1_in_Gad
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
FilterObjects:[module_num:18|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
    Select the objects to filter:PVnegGad
    Name the output objects:Bin1PosGadPVneg
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:Bin1NegGadPVNeg
    Select the measurement to filter by:Children_Bin1_maskedBy_Gad_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:19|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
    Select images to measure:ThresholdBin1, ThresholdGad, ThresholdPV
    Select objects to measure:Bin1, Bin1NegGadPVNeg, Bin1NegPV, Bin1PosGadPVneg, Bin1PosPV, Bin1_in_Gad, Bin1_in_PV, Bin1_maskedBy_Gad, Bin1_maskedBy_PV, GadCells, PV_in_Gad, PVcells, PVnegGad, PVposGad

MeasureImageAreaOccupied:[module_num:20|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
    Measure the area occupied by:Objects
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    Select object sets to measure:Bin1, Bin1NegGadPVNeg, Bin1NegPV, Bin1PosGadPVneg, Bin1PosPV, Bin1_in_Gad, Bin1_in_PV, Bin1_maskedBy_Gad, Bin1_maskedBy_PV, GadCells, PV_in_Gad, PVcells, PVnegGad, PVposGad

MeasureObjectSizeShape:[module_num:21|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
    Select object sets to measure:Bin1, Bin1NegGadPVNeg, Bin1NegPV, Bin1PosGadPVneg, Bin1PosPV, Bin1_in_Gad, Bin1_in_PV, Bin1_maskedBy_Gad, Bin1_maskedBy_PV, GadCells, PV_in_Gad, PVcells, PVnegGad, PVposGad
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:22|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\\\\138.26.54.244\\erlab$\\Natalie\\Imaging\\Slide Scanner\\3.12.25 Bin1 KO FISH\\408 FISH\\Fluoresence\\Results\\For Cell Profiler
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Count_PV_in_Gad,Image|Count_PVcells,Image|Count_Bin1PosPV,Image|Count_Bin1NegPV,Image|Count_PVnegGad,Image|Count_Bin1NegGadPVNeg,Image|Count_Bin1PosGadPVneg,Image|Count_PVposGad,Image|AreaOccupied_TotalArea_Bin1_maskedBy_PV,Image|AreaOccupied_TotalArea_Bin1_in_PV,Image|AreaOccupied_TotalArea_PVcells,Image|AreaOccupied_AreaOccupied_Bin1_maskedBy_PV,Image|AreaOccupied_AreaOccupied_Bin1_in_PV,Image|AreaOccupied_AreaOccupied_PVcells,Image|FileName_Bin1,Image|FileName_PV,Bin1_maskedBy_PV|Intensity_MeanIntensity_ThresholdPV,Bin1_maskedBy_PV|Intensity_MeanIntensity_ThresholdBin1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:4.14.25_ThresholdMethod_
    Overwrite existing files without warning?:No
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